PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = mock_study
  keyboardBackend = PsychToolbox
  logging level = data
  measureFrameRate = False
  runMode = 1
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Routines
  Routine WelcomeScreen
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    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the user study

        On the following screen, you will see a query image on the left, and will choose from the images on the right which is the same.

        Press 'SPACE' to start
    KeyboardComponent key_Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
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    TextComponent textEndMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Thank you for completing!
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  Routine blank500
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine NextScreen
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    TextComponent textNextScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next Set of Images

        Use the Button to change between color and grayscale

        Press 'SPACE' to continue
    KeyboardComponent key_NextScreen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialColor
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    MouseComponent mouse
      clickable = image1, image2, image3, image4, image5
      correctAns = correct_answer
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent imageQuery
      image [set every repeat] = $query_image
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image1
      image [set every repeat] = $choice1
      pos = (0, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image2
      image [set every repeat] = $choice2
      pos = (0.3, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image3
      image [set every repeat] = $choice3
      pos = (0.6, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image4
      image [set every repeat] = $choice4
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image5
      image [set every repeat] = $choice5
      pos = (0.3, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine trialGrayscale
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    MouseComponent mouse_2
      clickable = image1, image2, image3, image4, image5
      correctAns = correct_answer
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent imageQuery_2
      image [set every repeat] = $query_image
      pos = (-0.5, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent image1_2
      image [set every repeat] = $choice1
      pos = (0, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image2_2
      image [set every repeat] = $choice2
      pos = (0.3, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image3_2
      image [set every repeat] = $choice3
      pos = (0.6, 0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image4_2
      image [set every repeat] = $choice4
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent image5_2
      image [set every repeat] = $choice5
      pos = (0.3, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        color_paths = [choice1, choice2, choice3, choice4, choice5]
        grayscale_paths = [gray1, gray2, gray3, gray4, gray5]

        toggle_button.toggleGray = False  # Set the toggle state ON the button object

        image1_2.setImage(color_paths[0])
        image2_2.setImage(color_paths[1])
        image3_2.setImage(color_paths[2])
        image4_2.setImage(color_paths[3])
        image5_2.setImage(color_paths[4])
    ButtonComponent toggle_button
      bold = True
      borderColor = 0.9608, 0.8431, 0.6863
      borderWidth = 0.5
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (-0.5, -0.4)
      size = (0.25, 0.125)
      startVal [time (s)] = 0
      text = Toggle Color/Grayscale
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      callback:
        print("Button clicked.")

        toggle_button.toggleGray = not toggle_button.toggleGray
        print("Grayscale is now:", toggle_button.toggleGray)

        if toggle_button.toggleGray:
            image1_2.setImage(grayscale_paths[0])
            image2_2.setImage(grayscale_paths[1])
            image3_2.setImage(grayscale_paths[2])
            image4_2.setImage(grayscale_paths[3])
            image5_2.setImage(grayscale_paths[4])
        else:
            image1_2.setImage(color_paths[0])
            image2_2.setImage(color_paths[1])
            image3_2.setImage(color_paths[2])
            image4_2.setImage(color_paths[3])
            image5_2.setImage(color_paths[4])
Flow
  Routine WelcomeScreen
  LoopInitiator trialsColor loopType="TrialHandler"
    conditionsFile = queryImages.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'query_image': 'images/grape.png', 'choice1': 'images/kiwi.png', 'choice2': 'images/orange.png', 'choice3': 'images/grape.png', 'choice4': 'images/banana.png', 'choice5': 'images/apple.png', 'correct_answer': 'image3', 'gray1': 'images/kiwi_gray.png', 'gray2': 'images/orange_gray.png', 'gray3': 'images/grape_gray.png', 'gray4': 'images/banana_gray.png', 'gray5': 'images/apple_gray.png'},
      {'query_image': 'images/kiwi.png', 'choice1': 'images/kiwi.png', 'choice2': 'images/apple.png', 'choice3': 'images/grape.png', 'choice4': 'images/banana.png', 'choice5': 'images/orange.png', 'correct_answer': 'image1', 'gray1': 'images/kiwi_gray.png', 'gray2': 'images/apple_gray.png', 'gray3': 'images/grape_gray.png', 'gray4': 'images/banana_gray.png', 'gray5': 'images/orange_gray.png'},
      {'query_image': 'images/banana.png', 'choice1': 'images/apple.png', 'choice2': 'images/banana.png', 'choice3': 'images/orange.png', 'choice4': 'images/kiwi.png', 'choice5': 'images/grape.png', 'correct_answer': 'image2', 'gray1': 'images/apple_gray.png', 'gray2': 'images/banana_gray.png', 'gray3': 'images/orange_gray.png', 'gray4': 'images/kiwi_gray.png', 'gray5': 'images/grape_gray.png'},
      {'query_image': 'images/apple.png', 'choice1': 'images/orange.png', 'choice2': 'images/apple.png', 'choice3': 'images/grape.png', 'choice4': 'images/banana.png', 'choice5': 'images/kiwi.png', 'correct_answer': 'image2', 'gray1': 'images/orange_gray.png', 'gray2': 'images/apple_gray.png', 'gray3': 'images/grape_gray.png', 'gray4': 'images/banana_gray.png', 'gray5': 'images/kiwi_gray.png'}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
    Routine trialColor
    Routine blank500
  LoopTerminator trialsColor
  Routine NextScreen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = queryImages.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine trialGrayscale
    Routine blank500
  LoopTerminator trials
  Routine EndScreen
